PsychoPy2experiment version="3.0.7"
Settings
  Data filename = 'data/%s'%(expInfo['participant'])
  Experiment info = {'participant': '001', 'dominant_eye': "'left'"}
  Force stereo = False
  Full-screen window = False
  Monitor = VIEWPixx
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $[-0.122,-0.122,-0.122]
  expName = psychopy2
  exportHTML = manually
  logging level = warning
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Routines
  Routine instructions
    TextComponent instructions_text
      color = $[1, 1, 1]
      font = Calibri
      letterHeight = 50
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 800
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      text:
        Stay fixated on the central white dot and ignore the word itself. To respond press:
         - Left for red LETTERS
         - Down for green LETTERS
         - Right for blue LETTERS

        Press SPACE to continue.
    KeyboardComponent instructions_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine finished
    TextComponent finished_text
      color = $[1, 1, 1]
      font = Calibri
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
      wrapWidth = 800
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      text:
        This is the end of the experiment. Thanks!

        Press SPACE to exit.
    KeyboardComponent finished_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task
    TextComponent stimulus_text
      color [set every repeat] = $stimColor
      font = Calibri
      letterHeight = 100
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimText
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    GratingComponent fixation
      mask = circle
      opacity = .7
      sf = 40
      size = [16,16]
      startVal [time (s)] = 0
      tex = sin
      units = pix
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    GratingComponent gaze_cursor
      color = $[0.004,0.004,1.000]
      mask = circle
      opacity [set every frame] = $display_gaze
      pos [set every frame] = $[x,y]
      sf = 40
      size [set every frame] = (30,30)
      startVal [time (s)] = 0.0
      tex = sin
      units = pix
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    KeyboardComponent stimulus_keyboard
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    CodeComponent stimulus_code
      Code Type = Py
      Begin Routine:
        # Start recording. This should be run at the start of the trial.
        # Note: There is an intentional delay of 150 msec to allow the Eyelink to buffer gaze samples.
        eyetracking.start_recording(trial=practiceLrn.thisN, block='practiceblock')

        # Send messages to Eyelink. This allows post-hoc processing of timing related events (i.e. "stimulus onset").
        # Sending message "stimulus onset".
        msg = "stimulus onset"
        eyetracking.send_message(msg=msg)
      Each Frame:
        #if eyetracker:
        #    # check for 'g' key press to toggle gaze cursor visibility
        #    if iokeyboard.getPresses(keys=['g',]):
        #        display_gaze=not display_gaze
        #
        #    # get /eye tracker gaze/ position
        #    gpos=eyetracker.getPosition()
        #    if type(gpos) in [list,tuple]:
        #        x,y=gpos[0], gpos[1]
        #        d=np.sqrt(x**2+y**2)
        #        if d>maintain_fix_pix_boundary:
        #            heldFixation = False #unless otherwise
      End Experiment:
        # Finish recording
        eyetracking.finish_recording()
      End Routine:
        # Send messages to Eyelink. This allows post-hoc processing of timing related events (i.e. "stimulus onset").
        # Sending message "stimulus offset".
        msg = "stimulus offset"
        eyetracking.send_message(msg=msg)
        # Prepare variables to be sent to Eyelink
        variables = dict(color=StimColor, text=StimText, isCongruent=congruent, response=response.keys, correct=CorrAns)
        # Stop recording
        eyetracking.stop_recording(trial=trials.thisN, block=block.thisN, variables=variables)
  Routine calibration
    TextComponent calibration_text
      color = $[1, 1, 1]
      font = Calibri
      letterHeight = 50
      startVal [time (s)] = 0
      text = Press any key to continue
      units = pix
      wrapWidth = 800
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    KeyboardComponent calibration_keyboard
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent calibration_code
      Code Type = Py
      Begin Routine:
        # Initialize the Eyelink.
        import os, sys
        sys.path.append(os.path.abspath(os.getcwd() + '../../../../../../'))
        import mdl
        eyetracking = mdl.eyetracking.run(window=win, subject=expInfo['participant'], timer=routineTimer)

        # Connect to the Eyelink Host.
        param = eyetracking.connect(calibration_type=13)

        # Setting the dominant eye
        eye_used = eyetracking.set_eye_used(eye=dominant_eye)

        # Start calibration.
        eyetracking.calibration()
Flow
  Routine instructions
  Routine calibration
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trialTypes.xlsx
      endPoints = [1, 2]
      loopType = random
      nReps = 5
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      conditions:
        [{'stimColor': 'red', 'stimText': 'red', 'congruent': 1, 'corrAns': 'left'},
        {'stimColor': 'green', 'stimText': 'red', 'congruent': 0, 'corrAns': 'down'},
        {'stimColor': 'green', 'stimText': 'green', 'congruent': 1, 'corrAns': 'down'},
        {'stimColor': 'blue', 'stimText': 'green', 'congruent': 0, 'corrAns': 'right'},
        {'stimColor': 'blue', 'stimText': 'blue', 'congruent': 1, 'corrAns': 'right'},
        {'stimColor': 'red', 'stimText': 'blue', 'congruent': 0, 'corrAns': 'left'}]
      Routine task
    LoopTerminator trials
  LoopTerminator block
  Routine finished
